PsychoPy2experiment version="2020.2.8"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = $[1,1,1]
  expName = experiment
  exportHTML = on Save
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $path
      size = (1, 0.75)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
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    TextComponent text
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 2.0
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      text:
        Press 'up' if the trend was increasing.
        Press 'down' if the trend was decreasing.
    KeyboardComponent key_resp
      allowedKeys = 'up','down'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine instruct
    TextComponent instruct_text
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instructions
        1. Test
        2. Test
        3. Test

        Press any key to start!
    KeyboardComponent ready
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine timer
    TextComponent timer1
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent timer2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent timer3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      text = 1
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    TextComponent timergo
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
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      text:
        Start!
  Routine thanks
    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!

        Press any key to exit.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruct
  Routine timer
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = dataset\setdesc.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('label', 0), ('is_control', False), ('repl_no', -0.01), ('slope', 0.0), ('noise', None)]),
      OrderedDict([('label', 1), ('is_control', False), ('repl_no', -0.01), ('slope', 0.0), ('noise', None)]),
      OrderedDict([('label', 2), ('is_control', False), ('repl_no', -0.01), ('slope', 0.0), ('noise', None)]),
      OrderedDict([('label', 3), ('is_control', False), ('repl_no', -0.01), ('slope', 0.0), ('noise', None)]),
      OrderedDict([('label', 4), ('is_control', False), ('repl_no', 0.01), ('slope', 0.0), ('noise', None)]),
      OrderedDict([('label', 5), ('is_control', False), ('repl_no', 0.01), ('slope', 0.0), ('noise', None)]),
      OrderedDict([('label', 6), ('is_control', False), ('repl_no', 0.01), ('slope', 0.0), ('noise', None)]),
      OrderedDict([('label', 7), ('is_control', False), ('repl_no', 0.01), ('slope', 0.0), ('noise', None)]),
      OrderedDict([('label', 8), ('is_control', False), ('repl_no', -0.01), ('slope', 0.025), ('noise', None)]),
      OrderedDict([('label', 9), ('is_control', False), ('repl_no', -0.01), ('slope', 0.025), ('noise', None)]),
      OrderedDict([('label', 10), ('is_control', False), ('repl_no', -0.01), ('slope', 0.025), ('noise', None)]),
      OrderedDict([('label', 11), ('is_control', False), ('repl_no', -0.01), ('slope', 0.025), ('noise', None)]),
      OrderedDict([('label', 12), ('is_control', False), ('repl_no', 0.01), ('slope', 0.025), ('noise', None)]),
      OrderedDict([('label', 13), ('is_control', False), ('repl_no', 0.01), ('slope', 0.025), ('noise', None)])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
    Routine trial
  LoopTerminator trials
  Routine thanks
